PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experience
  keyboardBackend = ioHub
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to Colored Dobble!

        This is a color-shade discrimination experiment.

        There will be a small test at the beginning so you can understand the experiment better.

        You will be given 3 color-shades in the center of your screen.

        Then just below, you will have 3 possible answers.

        You should choose the CORRECT color shade that matches one of the 3 color shades from the center of the screen.

        There is always ONE correct answer.

        Use LEFT, UP and RIGHT arrow keys to choose one of the 3 possible answers.

        Do NOT answer RANDOMLY. If you don't see the difference between colors or are not sure about the answer, press the DOWN arrow key.

        Press SPACEBAR to start the test.

        Peace.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine examples
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    PolygonComponent polygon
      fillColor [set every repeat] = $HEX1
      lineColor = 1.0000, 1.0000, 1.0000
      pos = (-0.3, 0.0)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_2
      fillColor [set every repeat] = $HEX2
      pos = (0.3, 0.0)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent polygon_3
      fillColor [set every repeat] = $HEX3
      pos = (0, 0.3)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent answer_1
      fillColor [set every repeat] = $HEXL
      pos = (-0.4, -0.4)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent answer_2
      fillColor [set every repeat] = $HEXU
      pos = (0, -0.4)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent answer_3
      fillColor [set every repeat] = $HEXR
      pos = (0.4, -0.4)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ProgressComponent prog_2
      anchor = top-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.5, 0.5)
      progress [set every repeat] = prog
      saveStartStop = False
      size = (1, 0.03)
      startVal [time (s)] = 0
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    PolygonComponent arrow_left
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = -90
      pos = (-0.4, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_up
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_right
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = 90
      pos = (0.4, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 5
      text = yo need to answer in these 5 seconds bro :)
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  Routine begining_exper
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    TextComponent text_2
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, you have 21 REAL questions to answer.

        Remember, there are only 5 seconds per question.

        If you are not sure for the answer, press DOWN.

        Press SPACEBAR to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine trials_5
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    PolygonComponent circle1
      fillColor [set every repeat] = $HEX1
      lineColor = 1.0000, 1.0000, 1.0000
      pos = (-0.3, 0.0)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent circle2
      fillColor [set every repeat] = $HEX2
      pos = (0.3, 0.0)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent circle3
      fillColor [set every repeat] = $HEX3
      pos = (0, 0.3)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent answerLeft
      fillColor [set every repeat] = $HEXL
      pos = (-0.4, -0.4)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent answerUp
      fillColor [set every repeat] = $HEXU
      pos = (0, -0.4)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent answerRight
      fillColor [set every repeat] = $HEXR
      pos = (0.4, -0.4)
      saveStartStop = False
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent keysUsed
      allowedKeys = 'left','right','up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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    PolygonComponent arrowLeft
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = -90
      pos = (-0.4, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent arrowUp
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.4)
      saveStartStop = False
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent arrowRight
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori = 90
      pos = (0.4, -0.4)
      shape = arrow
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine thanks_message
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    TextComponent text_4
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        thank you for your time!!!

        press space to exit!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = HEX.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'HEX1': '#E2E2E2', 'HEX2': '#777777', 'HEX3': '#000000', 'HEXL': '#777777', 'HEXU': '#3B3B3B', 'HEXR': '#B9B9B9', 'correct': 'left', 'prog': 0},
      {'HEX1': '#000000', 'HEX2': '#919191', 'HEX3': '#262626', 'HEXL': '#525252', 'HEXU': '#303030', 'HEXR': '#262626', 'correct': 'right', 'prog': 0.5},
      {'HEX1': '#FFFFFF', 'HEX2': '#1B1B1B', 'HEX3': '#DADADA', 'HEXL': '#1B1B1B', 'HEXU': '#B0B0B0', 'HEXR': '#666666', 'correct': 'left', 'prog': 1}]
    Routine examples
  LoopTerminator trials_3
  Routine begining_exper
  LoopInitiator L_varied loopType="TrialHandler"
    conditionsFile = HEX_ALL.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'LABEL': 'L35', 'HEX1': '#B18698', 'HEX2': '#ff48ac', 'HEX3': '#f67bab', 'HEXR': '#B18698', 'HEXU': '#af396d', 'HEXL': '#940053', 'CORRECT': 'right'},
      {'LABEL': 'L30', 'HEX1': '#A30000', 'HEX2': '#860089', 'HEX3': '#1448ac', 'HEXR': '#1448ac', 'HEXU': '#4f0000', 'HEXL': '#2d0300', 'CORRECT': 'right'},
      {'LABEL': 'L25', 'HEX1': '#00114d', 'HEX2': '#36004d', 'HEX3': '#b20000', 'HEXR': '#cf92e5', 'HEXU': '#00114d', 'HEXL': '#680000', 'CORRECT': 'up'},
      {'LABEL': 'L20', 'HEX1': '#cf92e5', 'HEX2': '#ea8ea3', 'HEX3': '#5d9bff', 'HEXR': '#0069c6', 'HEXU': '#00bfa0', 'HEXL': '#cf92e5', 'CORRECT': 'left'},
      {'LABEL': 'L15', 'HEX1': '#00bfa0', 'HEX2': '#b0a7a2', 'HEX3': '#00cb9f', 'HEXR': '#c6a0a2', 'HEXU': '#00cb9f', 'HEXL': '#88807b', 'CORRECT': 'right'},
      {'LABEL': 'L10', 'HEX1': '#c6f1f1', 'HEX2': '#ff8aaf', 'HEX3': '#7c072c', 'HEXR': '#ff8aaf', 'HEXU': '#cf5b6e', 'HEXL': '#c611f1', 'CORRECT': 'right'},
      {'LABEL': 'A35', 'HEX1': '#002d63', 'HEX2': '#9c0065', 'HEX3': '#ff2ff1', 'HEXR': '#ff2ff1', 'HEXU': '#6f4064', 'HEXL': '#004962', 'CORRECT': 'right'},
      {'LABEL': 'A30', 'HEX1': '#ffd82f', 'HEX2': '#e6f200', 'HEX3': '#caff26', 'HEXR': '#ff1e49', 'HEXU': '#7eff1e', 'HEXL': '#e6f200', 'CORRECT': 'left'},
      {'LABEL': 'A25', 'HEX1': '#00a7f2', 'HEX2': '#ca668d', 'HEX3': '#134f4b', 'HEXR': '#d17bf3', 'HEXU': '#134f4b', 'HEXL': '#680238', 'CORRECT': 'up'},
      {'LABEL': 'A20', 'HEX1': '#4f1317', 'HEX2': '#ffe5c6', 'HEX3': '#ac2a33', 'HEXR': '#ac2a33', 'HEXU': '#d9f0c5', 'HEXL': '#8f001d', 'CORRECT': 'right'}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
    Routine trials_5
  LoopTerminator L_varied
  Routine thanks_message
